CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:32
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does T "0")
    Name to assign these images:CD25_Ki67
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does T "1")
    Name to assign these images:brightfield
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does T "2")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does T "3")
    Name to assign these images:mitochondria
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does T "4")
    Name to assign these images:actin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
MeasureImageQuality:[module_num:5|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
    Calculate metrics for which images?:All loaded images
    Image count:1
    Scale count:1
    Threshold count:1
    Select the images to measure:Actin, CD25_Ki67, DNA, Mitochondria
    Include the image rescaling value?:Yes
    Calculate blur metrics?:No
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    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:No
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
ImageMath:[module_num:6|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:Yes
    Name the output image:Cell_outline
    Image or measurement?:Image
    Select the first image:DNA
    Multiply the first image by:1
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    Image or measurement?:Image
    Select the second image:CD25_Ki67
    Multiply the second image by:5
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    Image or measurement?:Image
    Select the third image:actin
    Multiply the third image by:5
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    Image or measurement?:Image
    Select the fourth image:brightfield
    Multiply the fourth image by:1.0
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    Image or measurement?:Image
    Select the fifth image:mitochondria
    Multiply the fifth image by:1.0
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,90
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:20
    Suppress local maxima that are closer than this minimum allowed distance:20
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:8|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
    Select the input objects:Nuclei
    Name the objects to be identified:cell
    Select the method to identify the secondary objects:Propagation
    Select the input image:Cell_outline
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:50
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    Thresholding method:Otsu

OverlayOutlines:[module_num:9|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:CD25_Ki67
    Name the output image:OrigOverlay_0
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:cell

OverlayOutlines:[module_num:10|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:actin
    Name the output image:OrigOverlay_actin
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#21FF06
    Select objects to display:cell

OverlayOutlines:[module_num:11|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:mitochondria
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#FECC66
    Select objects to display:cell

IdentifyTertiaryObjects:[module_num:12|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
    Select the larger identified objects:cell
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MaskImage:[module_num:13|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enabled:False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
    Select the input image:CD25_Ki67
    Name the output image:Mask_CD25
    Use objects or an image as a mask?:Objects
    Select object for mask:cell
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:14|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enabled:False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
    Select the input image:Mask_CD25
    Name the primary objects to be identified:Ki67
    Typical diameter of objects, in pixel units (Min,Max):6,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.001,1.0
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    Log transform before thresholding?:Yes
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
IdentifyPrimaryObjects:[module_num:15|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enabled:False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
    Select the input image:actin
    Name the primary objects to be identified:actin
    Typical diameter of objects, in pixel units (Min,Max):10,100
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.004,1.0
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    Size of adaptive window:100
    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
    Thresholding method:Robust Background

IdentifyPrimaryObjects:[module_num:16|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enabled:False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
    Select the input image:mitochondria
    Name the primary objects to be identified:MC
    Typical diameter of objects, in pixel units (Min,Max):20,100
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:Yes
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
RelateObjects:[module_num:17|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enabled:False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
    Parent objects:cell
    Child objects:Ki67
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:18|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enabled:False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
    Parent objects:cell
    Child objects:MC
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:19|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enabled:False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
    Parent objects:cell
    Child objects:actin
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:20|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enabled:False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
    Parent objects:cell
    Child objects:Nuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
MeasureImageIntensity:[module_num:21|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
    Select images to measure:CD25_Ki67, DNA, actin, mitochondria
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:Cytoplasm, Nuclei, cell
    Calculate custom percentiles:Yes
    Specify percentiles to measure:10,90

MeasureObjectIntensity:[module_num:22|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
    Select images to measure:CD25_Ki67, actin, mitochondria
    Select objects to measure:Cytoplasm, Nuclei, cell

MeasureObjectIntensity:[module_num:23|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
    Select images to measure:DNA
    Select objects to measure:Nuclei

MeasureObjectSizeShape:[module_num:24|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
    Select object sets to measure:Nuclei, cell
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureColocalization:[module_num:25|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
    Select images to measure:CD25_Ki67, DNA
    Set threshold as percentage of maximum intensity for the images:5.0
    Select where to measure correlation:Within objects
    Select objects to measure:Nuclei
    Run all metrics?:No
    Calculate correlation and slope metrics?:No
    Calculate the Manders coefficients?:Yes
    Calculate the Rank Weighted Colocalization coefficients?:No
    Calculate the Overlap coefficients?:Yes
    Calculate the Manders coefficients using Costes auto threshold?:No
    Method for Costes thresholding:Faster

MeasureColocalization:[module_num:26|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
    Select images to measure:CD25_Ki67, mitochondria
    Set threshold as percentage of maximum intensity for the images:5.0
    Select where to measure correlation:Both
    Select objects to measure:Cytoplasm, Nuclei
    Run all metrics?:No
    Calculate correlation and slope metrics?:No
    Calculate the Manders coefficients?:Yes
    Calculate the Rank Weighted Colocalization coefficients?:No
    Calculate the Overlap coefficients?:Yes
    Calculate the Manders coefficients using Costes auto threshold?:No
    Method for Costes thresholding:Faster

MeasureColocalization:[module_num:27|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
    Select images to measure:CD25_Ki67, actin
    Set threshold as percentage of maximum intensity for the images:5.0
    Select where to measure correlation:Both
    Select objects to measure:Cytoplasm, Nuclei
    Run all metrics?:No
    Calculate correlation and slope metrics?:No
    Calculate the Manders coefficients?:Yes
    Calculate the Rank Weighted Colocalization coefficients?:No
    Calculate the Overlap coefficients?:Yes
    Calculate the Manders coefficients using Costes auto threshold?:No
    Method for Costes thresholding:Faster

MeasureTexture:[module_num:28|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
    Select images to measure:DNA
    Select objects to measure:Nuclei
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:2

MeasureTexture:[module_num:29|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
    Select images to measure:mitochondria
    Select objects to measure:cell
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:2

MeasureGranularity:[module_num:30|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
    Select images to measure:mitochondria
    Measure within objects?:Yes
    Select objects to measure:Cytoplasm, cell
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:1
    Range of the granular spectrum:16

MeasureGranularity:[module_num:31|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
    Select images to measure:DNA
    Measure within objects?:Yes
    Select objects to measure:Nuclei
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:1
    Range of the granular spectrum:16

ExportToSpreadsheet:[module_num:32|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|Desktop/Julie/20230728_TCA/results_test_farm
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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